PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  expName = change-your-mind
  keyboardBackend = ioHub
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Routines
  Routine code
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    CodeComponent declarations
      Code Type = Auto->JS
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      Begin Experiment:
        difficultTargetDuration=0.06
        responseKeys=[['b','index finger'],['y','middle finger']]

        def generateTargetString(targetLetter, position):
            return position * 'X' + targetLetter + (7 - position) * 'X'

        def getTargetDuration(isDifficult):
            return difficultTargetDuration if isDifficult else 0.15

        def answeredCorrectly(targetLetter, responseKey):
            if targetLetter == 'T' and responseKey == keyForT():
                return True
            elif targetLetter == 'L' and responseKey == keyForL():
                return True
            return False

        def keyForT():
            return responseKeys[0][0]

        def keyForL():
            return responseKeys[1][0]

        def getFeedbackColor(isCorrect, accurateFeedback):
            if isCorrect:
                if accurateFeedback:
                    return "green"
                else:
                    return "red"
            elif accurateFeedback:
                return "red"
            return "green"

        def getFeedbackText(isCorrect, accurateFeedback):
            if isCorrect:
                if accurateFeedback:
                    return "+ correct +"
                else:
                    return "x wrong x"
            elif accurateFeedback:
                return "x wrong x"
            return "+ correct +"
  Routine instr_demo
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    TextboxComponent textbox
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.05
      pos = (0, -0.25)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Press the " + responseKeys[0][1] + " button if the letter was T.\n\nPress the " + responseKeys[1][1] + " button if the letter was L."
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    KeyboardComponent end_instr
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine landing_page
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    TextboxComponent upper_text
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, 0.30)
      size = (1.5, 1)
      startVal [time (s)] = 0.0
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      text:
        This task is comprised of a series of trials. On each trial you will see a fixation followed by a string of letters in the center of the screen.

        Please decide whether the string contains a T or an L.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent t_instructions
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (-0.3, 0.05)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Press " + responseKeys[0][1] + " if the letter was T."
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    TextboxComponent l_instructions
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0.3, 0.05)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      text = $"Press " + responseKeys[1][1] + " if the letter was L."
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    TextboxComponent lower_text
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, -0.26)
      size = (1.5, 0.5)
      startVal [time (s)] = 0.0
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      text:
        The computer will then provide you with feedback on your choice. The feedback may not always be 100% accurate.

        Immediately after the feedback the same trial will be presented again, so you will have the chance to change your mind if you wish.

        Press the space bar to continue.
  Routine first_round
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    TextboxComponent fixation_one
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.18
      pos = (0, -0.25)
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      text = 1
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    TextboxComponent target
      bold = False
      durationEstim = 0.15
      editable = False
      font = Consolas
      letterHeight = 0.18
      pos = (0, -0.25)
      size = (1, 1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $getTargetDuration(isDifficult)
      text [set every repeat] = $generateTargetString(targetLetter,targetLocation)
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    KeyboardComponent resp_one
      allowedKeys = 'b','y'
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [condition] = $len(resp_one.keys) >= 1
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    TextboxComponent target_masked
      bold = False
      durationEstim = 1.85
      editable = False
      font = Consolas
      letterHeight = 0.18
      pos = (0, -0.25)
      size = (1, 1)
      startVal [time (s)] = $getTargetDuration(isDifficult) + 0.5
      stopVal [duration (s)] = $2 - getTargetDuration(isDifficult)
      text = XXXXXXXX
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    CodeComponent update_target_duration
      Code Type = Auto->JS
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      End Routine:
        if isDifficult:
            wasCorrect = answeredCorrectly(targetLetter, resp_one.keys[0])
            difficultTargetDuration += -0.01 if wasCorrect else 0.01
            if difficultTargetDuration > 0.15:
                difficultTargetDuration = 0.15
            elif difficultTargetDuration < 0.01:
                difficultTargetDuration = 0.01
    TextComponent debug
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = $target_masked.status==FINISHED
      text [set every repeat] = $'accurateFeedback: ' + str(accurateFeedback)
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  Routine display_feedback
    TextboxComponent pre_feedback_delay
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [condition] = $target_masked.status==FINISHED
      stopVal [duration (frames)] = $preFeedbackInterval
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
    TextboxComponent feedback
      bold = False
      color [set every repeat] = $getFeedbackColor(answeredCorrectly(targetLetter, resp_one.keys[0]),accurateFeedback)
      editable = False
      font = Consolas
      letterHeight = 0.18
      pos = (0, -0.25)
      size = (2, 3)
      startVal [condition] = $pre_feedback_delay.status==FINISHED
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $getFeedbackText(answeredCorrectly(targetLetter, resp_one.keys[0]),accurateFeedback)
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    TextboxComponent post_feedback_delay
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [condition] = $feedback.status==FINISHED
      stopVal [duration (frames)] = $postFeedbackInterval
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  Routine second_round
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    TextboxComponent fixation_two
      bold = False
      editable = False
      font = Consolas
      letterHeight = .18
      pos = (0, -0.25)
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      text = 2
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    TextboxComponent target_two
      bold = False
      editable = False
      font = Consolas
      letterHeight = .18
      pos = (0, -0.25)
      size = (1, 1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $getTargetDuration(isDifficult)
      text [set every repeat] = $generateTargetString(targetLetter,targetLocation)
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    KeyboardComponent resp_two
      allowedKeys = 'b','y'
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [condition] = $len(resp_two.keys) >= 1
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    TextboxComponent target_masked_two
      bold = False
      editable = False
      font = Consolas
      letterHeight = 0.18
      pos = (0, -0.25)
      size = (1, 1)
      startVal [time (s)] = $getTargetDuration(isDifficult) + 0.5
      stopVal [duration (s)] = $2 - getTargetDuration(isDifficult)
      text = XXXXXXXX
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    TextboxComponent intertrial_interval
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [condition] = $len(resp_two.keys) >= 1 and target_masked_two.status==FINISHED
      stopVal [duration (frames)] = $itiFrames
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Flow
  Routine code
  Routine instr_demo
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('targetLetter', 'T'), ('isDifficult', 0), ('itiFrames', 127), ('preFeedbackInterval', 111), ('postFeedbackInterval', 144), ('accurateFeedback', 0), ('targetLocation', 5)]),
      OrderedDict([('targetLetter', 'L'), ('isDifficult', 0), ('itiFrames', 316), ('preFeedbackInterval', 177), ('postFeedbackInterval', 116), ('accurateFeedback', 0), ('targetLocation', 4)]),
      OrderedDict([('targetLetter', 'T'), ('isDifficult', 0), ('itiFrames', 252), ('preFeedbackInterval', 84), ('postFeedbackInterval', 81), ('accurateFeedback', 1), ('targetLocation', 5)]),
      OrderedDict([('targetLetter', 'L'), ('isDifficult', 0), ('itiFrames', 312), ('preFeedbackInterval', 86), ('postFeedbackInterval', 152), ('accurateFeedback', 1), ('targetLocation', 3)]),
      OrderedDict([('targetLetter', 'T'), ('isDifficult', 0), ('itiFrames', 168), ('preFeedbackInterval', 86), ('postFeedbackInterval', 79), ('accurateFeedback', 1), ('targetLocation', 5)]),
      OrderedDict([('targetLetter', 'L'), ('isDifficult', 0), ('itiFrames', 306), ('preFeedbackInterval', 136), ('postFeedbackInterval', 162), ('accurateFeedback', 1), ('targetLocation', 3)]),
      OrderedDict([('targetLetter', 'T'), ('isDifficult', 0), ('itiFrames', 194), ('preFeedbackInterval', 68), ('postFeedbackInterval', 154), ('accurateFeedback', 1), ('targetLocation', 3)]),
      OrderedDict([('targetLetter', 'L'), ('isDifficult', 0), ('itiFrames', 291), ('preFeedbackInterval', 152), ('postFeedbackInterval', 65), ('accurateFeedback', 1), ('targetLocation', 3)])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
    Routine first_round
    Routine display_feedback
    Routine second_round
  LoopTerminator trials
